PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = Framing
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent FixationPoint
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent SelectLeft
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.5
      pos = [0, -0.5]
      startVal [time (s)] = 0.5
      size = [0.3, 0.3]
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    PolygonComponent SelectRight
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.5
      pos = [0, 0.5]
      startVal [time (s)] = 0.5
      size = [0.5, 0.5]
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    ApertureComponent ProbabilityLeft
      stopVal [duration (s)] = 1.5
      pos = (0, -0.5)
      units = norm
      startVal [time (s)] = 0.5
      size = 1
    ApertureComponent ProbabilityRight
      stopVal [duration (s)] = 1.5
      pos = (0, 0.5)
      units = norm
      startVal [time (s)] = 0.5
      size = 1
    TextComponent FixedLeft
      stopVal [duration (s)] = 1.5
      pos = [0, -0.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    TextComponent FixedRight
      stopVal [duration (s)] = 1.5
      pos = [0, 0.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.5
      lineWidth = 3
      ori = 1
      startVal [time (s)] = 0.5
      nVertices = 2
      size = [5, 5]
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  Routine OriginalValue
    TextComponent BaseValue
      text = The current value is...
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator FramingLoop loopType="TrialHandler"
    conditionsFile = FramingTrialHandler.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'GambleLeft': 1, 'Frame': u'Gain ', 'Stable': u'Keep \xa320', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep80.jpg'},
      {'GambleLeft': 1, 'Frame': u'Gain', 'Stable': u'Keep \xa315', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep60.jpg'},
      {'GambleLeft': 1, 'Frame': u'Gain', 'Stable': u'Keep \xa310', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep40.jpg'},
      {'GambleLeft': 1, 'Frame': u'Gain', 'Stable': u'Keep \xa35', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep20.jpg'},
      {'GambleLeft': 1, 'Frame': u'Loss', 'Stable': u'Lose \xa35', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep80.jpg'},
      {'GambleLeft': 1, 'Frame': u'Loss', 'Stable': u'Lose \xa310', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep60.jpg'},
      {'GambleLeft': 1, 'Frame': u'Loss', 'Stable': u'Lose \xa315', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep40.jpg'},
      {'GambleLeft': 1, 'Frame': u'Loss', 'Stable': u'Lose \xa320', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep20.jpg'},
      {'GambleLeft': 0, 'Frame': u'Gain ', 'Stable': u'Keep \xa320', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep80.jpg'},
      {'GambleLeft': 0, 'Frame': u'Gain', 'Stable': u'Keep \xa315', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep60.jpg'},
      {'GambleLeft': 0, 'Frame': u'Gain', 'Stable': u'Keep \xa310', 'Catch': 0, 'Full_Amount': u'\xa325.00', 'Gamble': u'Keep40.jpg'}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
    Routine OriginalValue
    Routine trial
  LoopTerminator FramingLoop
